PsychoPy2experiment version="2026.1.3"
Settings
  expName = numbers_ro_2
  expVersion = v1.0.0
  Audio lib = ptb
  runMode = 1
  Experiment info = {"participant*":"","Language":"[\"arabic_path\",\"hindi_path\",\"mandarin_path\"]","N_Trials*":""}
  Monitor = testMonitor
  Screen = 3
  Full-screen window = True
  Window size (pixels) = [1440,900]
  Units = height
  measureFrameRate = False
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
    RoutineSettingsComponent trial
      durationEstim = 5
      forceNonSlip = True
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    CodeComponent debug_text_trial
      Code Type = Both
      Each Frame:
        timer_lines = []

        # Global clock
        try:
            timer_lines.append(f"Global: {globalClock.getTime():.2f}s")
        except:
            timer_lines.append("Global: N/A")

        # Routine timer
        try:
            timer_lines.append(f"Routine: {routineTimer.getTime():.2f}s")
        except:
            timer_lines.append("Routine: N/A")

        # Digit being shown
        try:
            timer_lines.append(f"Digit: {digit}")
        except:
            timer_lines.append("Digit: N/A")

        # Incorrect count
        try:
            timer_lines.append(f"Number incorrect: {incorrect}")
        except:
            timer_lines.append("Number incorrect: N/A")

        # Correct count
        try:
            timer_lines.append(f"Number correct: {correct}")
        except:
            timer_lines.append("Number correct: N/A")

        # number_trials
        try:
            timer_lines.append(f"number_trials: {number_trials}")
        except:
            timer_lines.append("number_trials: N/A")

        # trials_completed
        try:
            timer_lines.append(f"trials_completed: {trials_completed}")
        except:
            timer_lines.append("trials_completed: N/A")

        # elapsed time since experiment start
        try:
            elapsed = time.time() - exp_start_time
            timer_lines.append(f"elapsed: {elapsed:.2f}s")
        except:
            timer_lines.append("elapsed: N/A")

        # experiment_total_time
        try:
            timer_lines.append(f"experiment_total_time: {experiment_total_time}s")
        except:
            timer_lines.append("experiment_total_time: N/A")

        timer_display = "\n".join(timer_lines)
      Each JS Frame:
        timer_lines = [];
        timer_lines.push(`Global: ${util.pad(Number.parseFloat(globalClock.getTime()).toFixed(2), 1)}s`);
        try {
            timer_lines.push(`Routine: ${util.pad(Number.parseFloat(routineTimer.getTime()).toFixed(2), 1)}s`);
        } catch(e) {
            timer_lines.push("Routine: N/A");
        }
        try {
            timer_lines.push(`Digit: ${digit}`);
        } catch(e) {
            timer_lines.push("Digit: N/A");
        }
        timer_display = timer_lines.join("\n");
    CodeComponent code_with_trials_end
      Code Type = Py
      Before Experiment:
        import random

        ##trials_completed = 0
        #if len(sys.argv) >= 2:
        #    number_trials = int(sys.argv[1])
        #    language = sys.argv[2]
        #    print("Number of trials:", number_trials)
        #    correct = int(sys.argv[3])
        #    incorrect = int(sys.argv[4])
        #else:
        #    print("Usage: python script.py <number_of_trials>")
        #    number_trials = 3
        #    language = "arabic_path"
        #    correct = 0
        #    incorrect = 0
        ##    expInfo['Language'] = "arabic_path"
        ##
      Begin Experiment:
        digits = [0,1,2,3,4,5,6,7,8,9]
        correct_digits = []
        trials_completed = 0
        #correct = 0
        #incorrect = 0
        print('In begin experiment section of trial routine')
        import random
        number_trials = int(expInfo['N_Trials'])
        language = expInfo['Language']
        correct = 0
        incorrect = 0
        ##trials_completed = 0
        #if len(sys.argv) >= 2:
        #    number_trials = int(sys.argv[1])
        #    language = sys.argv[2]
        #    print("Number of trials:", number_trials)
        #    correct = int(sys.argv[3])
        #    incorrect = int(sys.argv[4])
        #else:
        #    print("Usage: python script.py <number_of_trials>")
        #    number_trials = 3
        #    language = "arabic_path"
        #    correct = 100
        #    incorrect = 99
        ##    expInfo['Language'] = "arabic_path"
        ##
      Begin Routine:
        random.shuffle(digits)
        response = None
        point_subtracted = False
        responded = False
        started_routine_at = globalClock.getTime()
        routineTimer.reset()
      Each Frame:
        # -----------------------------
        # SCORING + ROUTINE END LOGIC
        # -----------------------------

        if globalClock.getTime() > total_time:
            print(f"Timeout in TRIAL routine at {globalClock.getTime():.2f}")
            inner_loop.finished = True      # end the inner loop
            continueRoutine = False         # end THIS routine immediately
      End Routine:
        # -----------------------------
        # END ROUTINE
        # -----------------------------
        ended_routine_at = globalClock.getTime()

        # -----------------------------------------
        # 1. TIMEOUT / NO-RESPONSE CHECK
        # -----------------------------------------
        timed_out = (ended_routine_at - started_routine_at) >= min_time_for_incorrect
        no_response = (response is None)

        # Button callbacks already score responses; only score unanswered trials here.
        if not responded and (ended_routine_at - started_routine_at) >= 2.0:
            import csv
            # Increment incorrect
            incorrect += 1
            print("incremented incorrect:", incorrect)

            # -----------------------------------------
            # 2. WRITE THIS TRIAL TO CSV (your button logic)
            # -----------------------------------------
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')

            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")

            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            full_row = trials.thisTrial
            row = {key: full_row[key] for key in headers}

            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)
                if write_header:
                    writer.writeheader()
                writer.writerow(row)

        # -----------------------------------------
        # 4. LOOP ENDING LOGIC (unchanged)
        # -----------------------------------------
        if trials_completed >= number_trials:
            inner_loop.finished = True
            trials.finished = True

        if (correct + incorrect) >= number_trials:
            inner_loop.finished = True
            trials.finished = True
    ImageComponent image
      startVal [time (s)] = 0.0
      size = (0.3, 0.3)
      pos = (0, 0.2)
      saveStartStop = False
      syncScreenRefresh = False
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      image [set every repeat]:
        $trials.thisTrial[language]
    MouseComponent mouse
      startVal [time (s)] = 0
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
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    ButtonComponent button_0
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (-.5, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[0]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[0]
        trials_completed += 1
        print(response)
        responded = True
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_1
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (-.25, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[1]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[1]
        responded = True
        trials_completed+=1
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_2
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (0, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[2]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[2]
        responded = True
        trials_completed+=1
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_3
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (.25, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[3]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[3]
        responded = True
        trials_completed+=1
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_4
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (.5, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[4]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[4]
        responded = True
        trials_completed+=1
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_5
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (-.5, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[5]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[5]
        responded = True
        trials_completed+=1
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_6
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (-.25, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[6]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[6]
        responded = True
        trials_completed+=1
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_7
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (0, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[7]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[7]
        responded = True
        trials_completed+=1
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_8
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (.25, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[8]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[8]
        responded = True
        trials_completed+=1
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_9
      startVal [time (s)] = 0
      size = (0.09, 0.09)
      pos = (.5, -.3)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digits[9]
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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      callback:
        response = digits[9]
        responded = True
        trials_completed+=1
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    TextComponent debug_text
      startVal [time (s)] = 0.0
      pos = (0.2, 0.2)
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text [set every frame]:
        $timer_display
    TextComponent number_of_correct_text
      startVal [time (s)] = 0.0
      pos = (0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      disabled = True
      text [set every repeat] = $f"Number correct: {correct}"
      letterHeight = 0.05
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    TextComponent number_of_incorrect_text
      startVal [time (s)] = 0.0
      pos = (-0.4, 0.4)
      disabled = True
      text [set every repeat] = $f"Number incorrect: {incorrect}"
      letterHeight = 0.05
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    ProgressComponent prog
      startVal [time (s)] = 0
      color [set every frame] = 1.0000, 1.0000, 1.0000
      fillColor [set every frame] = black
      borderColor = white
      size = (0.5, 0.05)
      pos = (-.250, -0.45)
      units = height
      anchor = center-left
      saveStartStop = False
      disabled = True
      progress [set every frame] = max(0, 1 - (globalClock.getTime() / total_time))
      lineWidth = 4
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    TextComponent text_4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      disabled = True
      letterHeight = 0.05
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      text:
        Any text

        including line breaks
    CodeComponent add_data_num_correct_time
      Code Type = Both
      Begin Experiment:
        import time
        exp_start_time = time.time()
      Begin Routine:
        elapsed = time.time() - exp_start_time
        thisExp.addData('this trial start time', round(elapsed, 2))
        print("Elapsed:", round(elapsed, 2))
      End Routine:
        thisExp.addData("Number_correct", correct)
        thisExp.addData("Number_incorrect", incorrect)

        elapsed = time.time() - exp_start_time
        print("Elapsed:", round(elapsed, 2))
        thisExp.addData('this trial end time', round(elapsed, 2))
        #timer_lines.append(f"Global: {globalClock.getTime():.2f}s")
        #
  Routine blank_screen
    RoutineSettingsComponent blank_screen
      stopVal [duration (s)] = 0.1
      durationEstim = 10
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Save the current background so you can restore it later
        old_bg = win.color

        # Set background to black
        win.color = 'black'
        win.flip()
      End Routine:
        win.color = old_bg
        win.flip()
        globalClock.reset()
        print('Got into the reset_clcoks routine')
    TextComponent text_3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
      letterHeight = 0.05
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  Routine roo
    RoutineSettingsComponent roo
      stopVal [duration (s)] = 5
      forceNonSlip = True
      skipIf = globalClock.getTime()>= total_time
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    CodeComponent debug_text_reprimand_2
      Code Type = Both
      Each Frame:
        timer_lines = []
        timer_lines.append(f"Global: {globalClock.getTime():.2f}s")

        try:
            timer_lines.append(f"Routine: {routineTimer.getTime():.2f}s")
        except:
            timer_lines.append("Routine: N/A")

        #try:
        #    timer_lines.append(f"Inner: {innerClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Inner: N/A")
        #
        #try:
        #    timer_lines.append(f"Trial: {trialClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Trial: N/A")

        #try:
        #    timer_lines.append(f"Inner remaining: {inner_loop.nRemaining}")
        #except:
        #    timer_lines.append("Inner remaining: N/A")

        # Add the digit being shown this trial
        try:
            timer_lines.append(f"Digit: {digit}")
        except:
            timer_lines.append("Digit: N/A")

        timer_display = "\n".join(timer_lines)
      Each JS Frame:
        timer_lines = [];
        timer_lines.push(`Global: ${util.pad(Number.parseFloat(globalClock.getTime()).toFixed(2), 1)}s`);
        try {
            timer_lines.push(`Routine: ${util.pad(Number.parseFloat(routineTimer.getTime()).toFixed(2), 1)}s`);
        } catch(e) {
            timer_lines.push("Routine: N/A");
        }
        try {
            timer_lines.push(`Digit: ${digit}`);
        } catch(e) {
            timer_lines.push("Digit: N/A");
        }
        timer_display = timer_lines.join("\n");
    TextComponent text_5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      font = Times
      letterHeight = 0.05
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      text [set every frame]:
        $timer_display
    TextComponent number_of_correct_text_3
      startVal [time (s)] = 0.0
      pos = (0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      disabled = True
      text [set every repeat] = $f"Number correct: {correct}"
      letterHeight = 0.05
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    TextComponent number_of_incorrect_text_3
      startVal [time (s)] = 0.0
      pos = (-0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      disabled = True
      text [set every repeat] = $f"Number incorrect: {incorrect}"
      letterHeight = 0.05
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  Routine end_of_experiment
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    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Thank you for your participation!
        Click anywhere to exit
    MouseComponent mouse_2
      startVal [time (s)] = 0.0
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
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    TextComponent number_of_correct_text_4
      startVal [time (s)] = 0.0
      pos = (0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
      letterHeight = 0.05
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    TextComponent number_of_incorrect_text_4
      startVal [time (s)] = 0.0
      pos = (-0.4, 0.4)
      text [set every repeat] = $f"Number incorrect: {incorrect}"
      letterHeight = 0.05
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        logging.info(f"Current time {globalClock.getTime():.2f}s")

        thisExp.addData('Current Time', globalClock.getTime())
  Routine error_correction
    RoutineSettingsComponent error_correction
      stopVal [duration (s)] = 5
      forceNonSlip = True
      saveStartStop = False
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    CodeComponent debug_text_reprimand
      Code Type = Both
      Each Frame:
        timer_lines = []
        timer_lines.append(f"Global: {globalClock.getTime():.2f}s")

        try:
            timer_lines.append(f"Routine: {routineTimer.getTime():.2f}s")
        except:
            timer_lines.append("Routine: N/A")

        #try:
        #    timer_lines.append(f"Inner: {innerClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Inner: N/A")
        #
        #try:
        #    timer_lines.append(f"Trial: {trialClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Trial: N/A")

        #try:
        #    timer_lines.append(f"Inner remaining: {inner_loop.nRemaining}")
        #except:
        #    timer_lines.append("Inner remaining: N/A")

        # Add the digit being shown this trial
        try:
            timer_lines.append(f"Digit: {digit}")
        except:
            timer_lines.append("Digit: N/A")

        timer_display = "\n".join(timer_lines)
      Each JS Frame:
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    CodeComponent code_reprimand
      Code Type = Both
      Begin Routine:
        print('In begin routine of reprimand section')
        #if response == None:
        #    if (ended_routine_at - min_time_for_incorrect) >= (started_routine_at):
        #        counted_skipped_incorrect = True
        #        incorrect += 1
        #
      Each Frame:
        if globalClock.getTime() > total_time:
            print(f'Global Clock > {total_time} in each frame of reprimand routine')
            inner_loop.finished = True
            continueRoutine = False
    ImageComponent image_2
      startVal [time (s)] = 0.0
      size = (0.3, 0.3)
      pos = (0, 0.2)
      saveStartStop = False
      syncScreenRefresh = False
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      image [set every repeat]:
        $error_correction_trials.thisTrial[expInfo['Language']]
    ButtonComponent button
      startVal [time (s)] = 0
      size = (0.12, 0.12)
      pos = (-.0, -.1)
      anchor = bottom-center
      forceEndRoutine = True
      text [set every repeat] = $digit
      letterHeight = 0.05
      bold = True
      saveStartStop = False
      syncScreenRefresh = False
      timeRelativeTo = routine
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    TextComponent text_2
      startVal [time (s)] = 0.0
      pos = (0.2, 0.2)
      saveStartStop = False
      syncScreenRefresh = False
      letterHeight = 0.05
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      text [set every frame]:
        $timer_display
    TextComponent number_of_correct_text_2
      startVal [time (s)] = 0.0
      pos = (0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
      letterHeight = 0.05
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    TextComponent number_of_incorrect_text_2
      startVal [time (s)] = 0.0
      pos = (-0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = $f"Number incorrect: {incorrect}"
      letterHeight = 0.05
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    ProgressComponent prog_2
      startVal [time (s)] = 0
      color [set every frame] = 1.0000, 1.0000, 1.0000
      fillColor [set every frame] = black
      borderColor = white
      size = (0.5, 0.05)
      pos = (-.250, -0.45)
      units = height
      anchor = center-left
      saveStartStop = False
      syncScreenRefresh = False
      disabled = True
      progress [set every frame] = max(0, 1 - (globalClock.getTime() / total_time))
      lineWidth = 4
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  Routine error_correction_notification
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    TextComponent text_7
      startVal [time (s)] = 0.0
      text = Next, you will see the numbers you got incorrect, and have the opportunity to select the correct answer.  Please click or touch anywhere to continue.
      letterHeight = 0.05
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    MouseComponent mouse_3
      startVal [time (s)] = 3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
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    TextComponent number_of_correct_text_5
      startVal [time (s)] = 0.0
      pos = (0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
      letterHeight = 0.05
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    TextComponent number_of_incorrect_text_5
      startVal [time (s)] = 0.0
      pos = (-0.4, 0.4)
      saveStartStop = False
      syncScreenRefresh = False
      text [set every repeat] = $f"Number incorrect: {incorrect}"
      letterHeight = 0.05
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        logging.info(f"Current time {globalClock.getTime():.2f}s")

        thisExp.addData('Current Time', globalClock.getTime())
  Routine blank_trial_screen
    RoutineSettingsComponent blank_trial_screen
      stopVal [duration (s)] = 0.05
      saveStartStop = False
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    CodeComponent change_background_color
      Code Type = Auto->JS
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      Begin Routine:
        # 1. Initialize the background rect once at the start of your script/routine
        original_color = 'gray'  # Replace with your experiment's original background color
        bg_rect = visual.Rect(win, width=2, height=2, units='norm', fillColor=original_color, lineColor=None)

        # 2. CHANGE TO BLACK
        bg_rect.fillColor = 'black'
        bg_rect.draw()  # Draw the background first so it sits behind everything else
        # ... draw any other stimuli here if needed ...
        win.flip()
      End Routine:
        # 3. CHANGE BACK TO ORIGINAL COLOR
        bg_rect.fillColor = original_color
        bg_rect.draw()
        # ... draw any other stimuli here if needed ...
        win.flip()
  Routine blank_trial_screen1
    RoutineSettingsComponent blank_trial_screen1
      stopVal [duration (s)] = 0.05
      saveStartStop = False
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    CodeComponent change_background_color1
      Code Type = Auto->JS
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      Begin Routine:
        # 1. Initialize the background rect once at the start of your script/routine
        original_color = 'gray'  # Replace with your experiment's original background color
        bg_rect = visual.Rect(win, width=2, height=2, units='norm', fillColor=original_color, lineColor=None)

        # 2. CHANGE TO BLACK
        bg_rect.fillColor = 'black'
        bg_rect.draw()  # Draw the background first so it sits behind everything else
        # ... draw any other stimuli here if needed ...
        win.flip()
      End Routine:
        # 3. CHANGE BACK TO ORIGINAL COLOR
        bg_rect.fillColor = original_color
        bg_rect.draw()
        # ... draw any other stimuli here if needed ...
        win.flip()
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = digit_paths_black.csv
    nReps = 5
    endPoints = [0,1]
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    conditions:
      [OrderedDict([('digit', np.int64(0)), ('arabic_path', 'digits_output/Arabic/0_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/0_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/0_Mandarin_black.png'), ('correct_answer', np.int64(0)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(1)), ('arabic_path', 'digits_output/Arabic/1_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/1_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/1_Mandarin_black.png'), ('correct_answer', np.int64(1)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(2)), ('arabic_path', 'digits_output/Arabic/2_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/2_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/2_Mandarin_black.png'), ('correct_answer', np.int64(2)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(3)), ('arabic_path', 'digits_output/Arabic/3_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/3_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/3_Mandarin_black.png'), ('correct_answer', np.int64(3)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))])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
    LoopInitiator inner_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 100
      endPoints = [0,1]
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      Routine trial
      Routine blank_trial_screen
      Routine roo
    LoopTerminator inner_loop
    Routine blank_screen
  LoopTerminator trials
  Routine error_correction_notification
  LoopInitiator error_correction_trials loopType="TrialHandler"
    loopType = random
    conditionsFile = $f"{os.path.join('participant_conditions', os.path.basename(filename))}.csv"
    nReps = 1
    endPoints = [0,1]
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    conditions:
      [OrderedDict([('digit', np.int64(0)), ('arabic_path', 'digits_output/Arabic/0_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/0_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/0_Mandarin_black.png'), ('correct_answer', np.int64(0)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(1)), ('arabic_path', 'digits_output/Arabic/1_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/1_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/1_Mandarin_black.png'), ('correct_answer', np.int64(1)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(2)), ('arabic_path', 'digits_output/Arabic/2_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/2_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/2_Mandarin_black.png'), ('correct_answer', np.int64(2)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(3)), ('arabic_path', 'digits_output/Arabic/3_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/3_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/3_Mandarin_black.png'), ('correct_answer', np.int64(3)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))])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
    Routine error_correction
  LoopTerminator error_correction_trials
  Routine end_of_experiment
