PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant*': '', 'session': '001', 'Language': '["arabic_path","hindi_path","mandarin_path"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = numbers_control_endurance_90s
  expVersion = v1.0.0
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
    RoutineSettingsComponent trial
      durationEstim = 5
      forceNonSlip = True
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    CodeComponent debug_text_trial
      Code Type = Both
      Each Frame:
        timer_lines = []
        timer_lines.append(f"Global: {globalClock.getTime():.2f}s")

        try:
            timer_lines.append(f"Routine: {routineTimer.getTime():.2f}s")
        except:
            timer_lines.append("Routine: N/A")

        #try:
        #    timer_lines.append(f"Inner: {innerClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Inner: N/A")
        #
        #try:
        #    timer_lines.append(f"Trial: {trialClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Trial: N/A")

        #try:
        #    timer_lines.append(f"Inner remaining: {inner_loop.nRemaining}")
        #except:
        #    timer_lines.append("Inner remaining: N/A")

        # Add the digit being shown this trial
        try:
            timer_lines.append(f"Digit: {digit}")
        except:
            timer_lines.append("Digit: N/A")

        timer_display = "\n".join(timer_lines)
      Each JS Frame:
        timer_lines = [];
        timer_lines.push(`Global: ${util.pad(Number.parseFloat(globalClock.getTime()).toFixed(2), 1)}s`);
        try {
            timer_lines.push(`Routine: ${util.pad(Number.parseFloat(routineTimer.getTime()).toFixed(2), 1)}s`);
        } catch(e) {
            timer_lines.push("Routine: N/A");
        }
        try {
            timer_lines.push(`Digit: ${digit}`);
        } catch(e) {
            timer_lines.push("Digit: N/A");
        }
        timer_display = timer_lines.join("\n");
    CodeComponent code_end_exp_at_time
      Code Type = Both
      Before Experiment:
        import random
        #total_time= 90
      Begin Experiment:
        digits = [0,1,2,3,4,5,6,7,8,9]
        correct_digits = []
        total_time= 90
        correct = 0
        incorrect = 0
        import time
        print('In begin experiment section of trial routine')
      Begin Routine:
        random.shuffle(digits)
        response = None
        point_subtracted = False
        responded = False
        started_routine_at = globalClock.getTime()
        routineTimer.reset()
      Each Frame:
        # -----------------------------
        # SCORING + ROUTINE END LOGIC
        # -----------------------------

        if globalClock.getTime() > total_time:
            print(f"Timeout in TRIAL routine at {globalClock.getTime():.2f}")
            inner_loop.finished = True      # end the inner loop
            trials.finished = True
            continueRoutine = False         # end THIS routine immediately
      End Routine:
        ended_routine_at = globalClock.getTime()

        if ended_routine_at - min_time_for_incorrect > started_routine_at:
            if response == None:
                incorrect += 1
        #if globalClock.getTime() < total_time:
        #    print("Not enough time — repeating this trial")
        #    trials.thisTrialN -= 1
        #
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0
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    ImageComponent image
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      image [set every repeat]:
        $trials.thisTrial[expInfo['Language']]
    ButtonComponent button_0
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.5, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[0]
      timeRelativeTo = routine
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      callback:
        response = digits[0]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    ButtonComponent button_1
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.25, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[1]
      timeRelativeTo = routine
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      callback:
        response = digits[1]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    ButtonComponent button_2
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[2]
      timeRelativeTo = routine
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      callback:
        response = digits[2]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    ButtonComponent button_3
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.25, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[3]
      timeRelativeTo = routine
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      callback:
        response = digits[3]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    ButtonComponent button_4
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.5, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[4]
      timeRelativeTo = routine
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      callback:
        response = digits[4]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    ButtonComponent button_5
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.5, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[5]
      timeRelativeTo = routine
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      callback:
        response = digits[5]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    ButtonComponent button_6
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.25, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[6]
      timeRelativeTo = routine
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      callback:
        response = digits[6]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    ButtonComponent button_7
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[7]
      timeRelativeTo = routine
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      callback:
        response = digits[7]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    ButtonComponent button_8
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.25, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[8]
      timeRelativeTo = routine
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      callback:
        response = digits[8]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    ButtonComponent button_9
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.5, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[9]
      timeRelativeTo = routine
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      callback:
        response = digits[9]
        print(response)
        if response == digit:
         correct += 1
         print('incremented correct')
         print(correct)

        else:
         incorrect += 1
         print('incremented incorrect')
         print(incorrect)
    TextComponent text
      letterHeight = 0.05
      pos = (0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text [set every frame]:
        $timer_display
    TextComponent number_of_correct_text
      disabled = True
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
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    TextComponent number_of_incorrect_text
      disabled = True
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Number incorrect: {incorrect}"
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    ProgressComponent prog
      anchor = center-left
      borderColor = white
      color [set every frame] = 1.0000, 1.0000, 1.0000
      disabled = True
      fillColor [set every frame] = black
      lineWidth = 4
      pos = (-.250, -0.45)
      progress [set every frame] = max(0, 1 - (globalClock.getTime() / total_time))
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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    CodeComponent add_data_correct_incorrect
      Code Type = Both
      End Routine:
        thisExp.addData("Number_correct", correct)
        thisExp.addData("Number_incorrect", incorrect)
  Routine reprimand
    RoutineSettingsComponent reprimand
      disabled = True
      durationEstim = 5
      forceNonSlip = True
      saveStartStop = False
      skipIf = response == digit or globalClock.getTime()>= total_time
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    CodeComponent debug_text_reprimand
      Code Type = Auto->JS
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      Each Frame:
        timer_lines = []
        timer_lines.append(f"Global: {globalClock.getTime():.2f}s")

        try:
            timer_lines.append(f"Routine: {routineTimer.getTime():.2f}s")
        except:
            timer_lines.append("Routine: N/A")

        #try:
        #    timer_lines.append(f"Inner: {innerClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Inner: N/A")
        #
        #try:
        #    timer_lines.append(f"Trial: {trialClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Trial: N/A")

        #try:
        #    timer_lines.append(f"Inner remaining: {inner_loop.nRemaining}")
        #except:
        #    timer_lines.append("Inner remaining: N/A")

        # Add the digit being shown this trial
        try:
            timer_lines.append(f"Digit: {digit}")
        except:
            timer_lines.append("Digit: N/A")

        timer_display = "\n".join(timer_lines)
    CodeComponent code_reprimand
      Code Type = Both
      Begin Routine:
        print('In begin routine of reprimand section')
        #if response == None:
        #    if (ended_routine_at - min_time_for_incorrect) >= (started_routine_at):
        #        counted_skipped_incorrect = True
        #        incorrect += 1
        #
      Each Frame:
        if globalClock.getTime() > total_time:
            print(f'Global Clock > {total_time} in each frame of reprimand routine')
            inner_loop.finished = True
            continueRoutine = False
    ImageComponent image_2
      pos = (0, 0.3)
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      image [set every repeat]:
        $trials.thisTrial[expInfo['Language']]
    ButtonComponent button
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.0, -.1)
      saveStartStop = False
      size = (0.12, 0.12)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digit
      timeRelativeTo = routine
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text [set every frame]:
        $timer_display
    TextComponent number_of_correct_text_2
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
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    TextComponent number_of_incorrect_text_2
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number incorrect: {incorrect}"
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    ProgressComponent prog_2
      anchor = center-left
      borderColor = white
      color [set every frame] = 1.0000, 1.0000, 1.0000
      fillColor [set every frame] = black
      lineWidth = 4
      pos = (-.250, -0.45)
      progress [set every frame] = max(0, 1 - (globalClock.getTime() / total_time))
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      units = height
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  Routine blank_screen
    RoutineSettingsComponent blank_screen
      disabled = True
      saveStartStop = False
      stopVal [duration (s)] = 0.1
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Save the current background so you can restore it later
        old_bg = win.color

        # Set background to black
        win.color = 'black'
        win.flip()
      End Routine:
        win.color = old_bg
        win.flip()
        globalClock.reset()
        print('Got into the reset_clcoks routine')
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      syncScreenRefresh = False
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  Routine Thanks_Screen
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!
        Please let the researcher know you are done.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 5
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    TextComponent number_of_correct_text_3
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
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    TextComponent number_of_incorrect_text_3
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Number incorrect: {incorrect}"
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  Routine Welcome_Screen
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    TextComponent Welcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        Please click anywhere
        when ready to begin
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      saveStartStop = False
      startVal [time (s)] = 4
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Flow
  Routine Welcome_Screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = digit_paths_black.csv
    loopType = random
    nReps = 200
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    conditions:
      [OrderedDict([('digit', np.int64(0)), ('arabic_path', 'digits_output/Arabic/0_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/0_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/0_Mandarin_black.png'), ('correct_answer', np.int64(0)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(1)), ('arabic_path', 'digits_output/Arabic/1_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/1_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/1_Mandarin_black.png'), ('correct_answer', np.int64(1)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(2)), ('arabic_path', 'digits_output/Arabic/2_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/2_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/2_Mandarin_black.png'), ('correct_answer', np.int64(2)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(3)), ('arabic_path', 'digits_output/Arabic/3_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/3_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/3_Mandarin_black.png'), ('correct_answer', np.int64(3)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))])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
    LoopInitiator inner_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine reprimand
    LoopTerminator inner_loop
    Routine blank_screen
  LoopTerminator trials
  Routine Thanks_Screen
