PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant*': '', 'session': '001', 'Language': '["arabic_path","hindi_path","mandarin_path"]'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = numbers_fo_2
  expVersion = v1.0.0
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
    RoutineSettingsComponent trial
      durationEstim = 5
      forceNonSlip = True
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    CodeComponent debug_text_trial
      Code Type = Both
      Each Frame:
        timer_lines = []
        timer_lines.append(f"Global: {globalClock.getTime():.2f}s")

        try:
            timer_lines.append(f"Routine: {routineTimer.getTime():.2f}s")
        except:
            timer_lines.append("Routine: N/A")

        #try:
        #    timer_lines.append(f"Inner: {innerClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Inner: N/A")
        #
        #try:
        #    timer_lines.append(f"Trial: {trialClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Trial: N/A")

        #try:
        #    timer_lines.append(f"Inner remaining: {inner_loop.nRemaining}")
        #except:
        #    timer_lines.append("Inner remaining: N/A")

        # Add the digit being shown this trial
        try:
            timer_lines.append(f"Digit: {digit}")
        except:
            timer_lines.append("Digit: N/A")

        try:
            timer_lines.append(f"number_trials: {number_trials}")
        except:
            timer_lines.append(f"number_trials: N/A")

        try:
            timer_lines.append(f"trials_completed: {trials_completed}")
        except:
            timer_lines.append(f"trials_completed: N/A")

        elapsed = time.time() - exp_start_time
        try:
            timer_lines.append(f"elapsed: {elapsed:.2f}s")
        except:
            timer_lines.append("Routine: N/A")
        try:
            timer_lines.append(f"elapsed: {experiment_total_time}s")
        except:
            pass

        timer_display = "\n".join(timer_lines)
      Each JS Frame:
        timer_lines = [];
        timer_lines.push(`Global: ${util.pad(Number.parseFloat(globalClock.getTime()).toFixed(2), 1)}s`);
        try {
            timer_lines.push(`Routine: ${util.pad(Number.parseFloat(routineTimer.getTime()).toFixed(2), 1)}s`);
        } catch(e) {
            timer_lines.push("Routine: N/A");
        }
        try {
            timer_lines.push(`Digit: ${digit}`);
        } catch(e) {
            timer_lines.push("Digit: N/A");
        }
        timer_display = timer_lines.join("\n");
    CodeComponent end_at_specified_time
      Code Type = Both
      Before Experiment:
        import random
        import csv, os
      Begin Experiment:
        import time
        exp_start_time = time.time()
        elapsed = time.time() - exp_start_time

        experiment_total_time = 90

        print("Experiment start (system seconds):", exp_start_time)

        digits = [0,1,2,3,4,5,6,7,8,9]
        correct_digits = []

        correct = 0
        incorrect = 0
        print('In begin experiment section of trial routine')
      Begin Routine:
        random.shuffle(digits)
        response = None
        point_subtracted = False
        responded = False
        started_routine_at = globalClock.getTime()
        routineTimer.reset()
        selected_language = trials.thisTrial[expInfo['Language']]
        trials.thisTrial[expInfo['Language']]
      Each Frame:
        # -----------------------------
        # SCORING + ROUTINE END LOGIC
        # -----------------------------
        elapsed = time.time() - exp_start_time

        if globalClock.getTime() > total_time:
            print(f"Timeout in TRIAL routine at {globalClock.getTime():.2f}")
            inner_loop.finished = True      # end the inner loop
            continueRoutine = False         # end THIS routine immediately

        if elapsed > experiment_total_time:
            print(f"Timeout in TRIAL routine at {globalClock.getTime():.2f}")
            inner_loop.finished = True      # end the inner loop
            trials.finished = True
            continueRoutine = False         # end THIS routine immediately

        #elapsed = time.time() - exp_start_time
        #try:
        #    timer_lines.append(f"elapsed: {elapsed:.2f}s")
        #except:
        #    timer_lines.append("Routine: N/A")
        #try:
        #    timer_lines.append(f"elapsed: {experiment_total_time}s")
        #except:
        #    pass
        #
      End Routine:
        ended_routine_at = globalClock.getTime()

        if ended_routine_at - min_time_for_incorrect > started_routine_at:
            if response == None:
                incorrect += 1
        #if globalClock.getTime() < total_time:
        #    print("Not enough time — repeating this trial")
        #    trials.thisTrialN -= 1
        #
    ImageComponent image
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      image [set every repeat]:
        $trials.thisTrial[expInfo['Language']]
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0
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    ButtonComponent button_0
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.5, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[0]
      timeRelativeTo = routine
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      callback:
        response = digits[0]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_1
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.25, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[1]
      timeRelativeTo = routine
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      callback:
        response = digits[1]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_2
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[2]
      timeRelativeTo = routine
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      callback:
        response = digits[2]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_3
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.25, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[3]
      timeRelativeTo = routine
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      callback:
        response = digits[3]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)


        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_4
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.5, -.1)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[4]
      timeRelativeTo = routine
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      callback:
        response = digits[4]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_5
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.5, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[5]
      timeRelativeTo = routine
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      callback:
        response = digits[5]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_6
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.25, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[6]
      timeRelativeTo = routine
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      callback:
        response = digits[6]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_7
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[7]
      timeRelativeTo = routine
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      callback:
        response = digits[7]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_8
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.25, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[8]
      timeRelativeTo = routine
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      callback:
        response = digits[8]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    ButtonComponent button_9
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (.5, -.3)
      saveStartStop = False
      size = (0.09, 0.09)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digits[9]
      timeRelativeTo = routine
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      callback:
        response = digits[9]
        print(response)
        thisExp.addData('Response',response)
        if response == digit:
            thisExp.addData('This response','Correct')
            correct += 1
            print('incremented correct')
            print(correct)

        else:
            os.makedirs("participant_conditions", exist_ok=True)
            thisExp.addData('This response','Incorrect')
            incorrect += 1
            print('incremented incorrect')
            print(incorrect)

            # --- Build participant filename ---
            participant_id = expInfo['participant']
            outfile = os.path.join("participant_conditions", os.path.basename(filename) + ".csv")
            # --- Explicit header order ---
            headers = [
                "digit",
                "arabic_path",
                "hindi_path",
                "mandarin_path",
                "correct_answer",
                "total_time",
                "routine_time",
                "min_time_for_incorrect"
            ]

            # --- Get the full row of the current trial ---
            full_row = trials.thisTrial

            # Filter out unwanted PsychoPy metadata fields
            row = {key: full_row[key] for key in headers}

            # --- Write header if file does not exist ---
            import csv
            write_header = not os.path.exists(outfile)

            with open(outfile, 'a', newline='') as f:
                writer = csv.DictWriter(f, fieldnames=headers)

                if write_header:
                    writer.writeheader()
                writer.writerow(row)
    TextComponent text
      letterHeight = 0.05
      pos = (0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text [set every frame]:
        $timer_display
    TextComponent number_of_correct_text
      disabled = True
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
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    TextComponent number_of_incorrect_text
      disabled = True
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Number incorrect: {incorrect}"
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    ProgressComponent prog
      anchor = center-left
      borderColor = white
      color [set every frame] = 1.0000, 1.0000, 1.0000
      disabled = True
      fillColor [set every frame] = black
      lineWidth = 4
      pos = (-.250, -0.45)
      progress [set every frame] = max(0, 1 - (globalClock.getTime() / total_time))
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      units = height
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    CodeComponent add_data_num_correct_time
      Code Type = Both
      Begin Experiment:
        import time
        exp_start_time = time.time()
      Begin Routine:
        elapsed = time.time() - exp_start_time
        thisExp.addData('this trial start time', round(elapsed, 2))
        print("Elapsed:", round(elapsed, 2))
      End Routine:
        thisExp.addData("Number_correct", correct)
        thisExp.addData("Number_incorrect", incorrect)

        elapsed = time.time() - exp_start_time
        print("Elapsed:", round(elapsed, 2))
        thisExp.addData('this trial end time', round(elapsed, 2))
        #timer_lines.append(f"Global: {globalClock.getTime():.2f}s")
        #
    TextComponent text_4
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Any text

        including line breaks
  Routine blank_screen
    RoutineSettingsComponent blank_screen
      saveStartStop = False
      stopVal [duration (s)] = 0.1
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Save the current background so you can restore it later
        old_bg = win.color

        # Set background to black
        win.color = 'black'
        win.flip()
      End Routine:
        win.color = old_bg
        win.flip()
        globalClock.reset()
        print('Got into the reset_clcoks routine')
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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    CodeComponent log_time_3
      Code Type = Auto->JS
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      Begin Routine:
        elapsed = time.time() - exp_start_time
        print("Elapsed:", round(elapsed, 2))
        thisExp.addData('Current time', round(elapsed, 2))
        #timer_lines.append(f"Global: {globalClock.getTime():.2f}s")
        #
  Routine roo
    RoutineSettingsComponent roo
      stopVal [duration (s)] = 5
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    TextComponent number_of_correct_text_3
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
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    TextComponent number_of_incorrect_text_3
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number incorrect: {incorrect}"
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  Routine start_next_experiment
    RoutineSettingsComponent start_next_experiment
      disabled = True
      forceNonSlip = True
      stopVal [duration (s)] = 1
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    CodeComponent code_4
      Code Type = Py
      disabled = True
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      Begin Routine:
        language = expInfo['Language']
      End Routine:
        import subprocess
        import platform

        number_trials = correct + incorrect
        language = expInfo['Language']

        script_path = os.path.join(os.getcwd(), "numbers_ro_lastrun.py")

        args = [
            sys.executable,
            script_path,
            str(number_trials),
            str(language),
            str(correct),
            str(incorrect)
        ]

        system = platform.system()

        # ------------------------
        # WINDOWS
        # ------------------------
        if system == "Windows":
            DETACHED_PROCESS = 0x00000008
            CREATE_NEW_PROCESS_GROUP = 0x00000200

            subprocess.Popen(
                args,
                cwd=os.getcwd(),
                creationflags=DETACHED_PROCESS | CREATE_NEW_PROCESS_GROUP,
                close_fds=True
            )

        # ------------------------
        # macOS / Linux
        # ------------------------
        else:
            subprocess.Popen(
                args,
                cwd=os.getcwd(),
                start_new_session=True,
                close_fds=True
            )
  Routine blank_for_next
    RoutineSettingsComponent blank_for_next
      durationEstim = 20
      forceNonSlip = True
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The researcher will prepare the computer for the next phase.
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 4
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    TextComponent number_of_correct_text_4
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
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    TextComponent number_of_incorrect_text_4
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Number incorrect: {incorrect}"
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    CodeComponent log_time_2
      Code Type = Auto->JS
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      Begin Routine:
        elapsed = time.time() - exp_start_time
        print("Elapsed:", round(elapsed, 2))
        thisExp.addData('Experiment End Time', round(elapsed, 2))
        #timer_lines.append(f"Global: {globalClock.getTime():.2f}s")
        #
  Routine error_correction
    RoutineSettingsComponent error_correction
      durationEstim = 5
      forceNonSlip = True
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    CodeComponent debug_text_reprimand
      Code Type = Auto->JS
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      Each Frame:
        timer_lines = []
        timer_lines.append(f"Global: {globalClock.getTime():.2f}s")

        try:
            timer_lines.append(f"Routine: {routineTimer.getTime():.2f}s")
        except:
            timer_lines.append("Routine: N/A")

        #try:
        #    timer_lines.append(f"Inner: {innerClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Inner: N/A")
        #
        #try:
        #    timer_lines.append(f"Trial: {trialClock.getTime():.2f}s")
        #except:
        #    timer_lines.append("Trial: N/A")

        #try:
        #    timer_lines.append(f"Inner remaining: {inner_loop.nRemaining}")
        #except:
        #    timer_lines.append("Inner remaining: N/A")

        # Add the digit being shown this trial
        try:
            timer_lines.append(f"Digit: {digit}")
        except:
            timer_lines.append("Digit: N/A")

        timer_display = "\n".join(timer_lines)
    ImageComponent numeral_image_ec_phase
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      image [set every repeat]:
        $error_correction_trials.thisTrial[expInfo['Language']]
    ButtonComponent numeral_response_button
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-.0, -.1)
      saveStartStop = False
      size = (0.12, 0.12)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      text [set every repeat] = $digit
      timeRelativeTo = routine
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    TextComponent debug_text
      letterHeight = 0.05
      pos = (0.2, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text [set every frame]:
        $timer_display
        + str('here we will have them do only the ones they got wrong')
    TextComponent number_of_correct_text_2
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
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    TextComponent number_of_incorrect_text_2
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number incorrect: {incorrect}"
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    ProgressComponent prog_2
      anchor = center-left
      borderColor = white
      color [set every frame] = 1.0000, 1.0000, 1.0000
      disabled = True
      fillColor [set every frame] = black
      lineWidth = 4
      pos = (-.250, -0.45)
      progress [set every frame] = max(0, 1 - (globalClock.getTime() / total_time))
      saveStartStop = False
      size = (0.5, 0.05)
      startVal [time (s)] = 0
      syncScreenRefresh = False
      units = height
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    CodeComponent add_data_num_correct_time_2
      Code Type = Both
      Begin Routine:
        elapsed = time.time() - exp_start_time

        thisExp.addData('this error correction trial start time', round(elapsed, 2))
        print("Elapsed:", round(elapsed, 2))
      End Routine:
        elapsed = time.time() - exp_start_time
        print("Elapsed:", round(elapsed, 2))
        thisExp.addData('this error correction trial end time', round(elapsed, 2))
        #timer_lines.append(f"Global: {globalClock.getTime():.2f}s")
        #
  Routine error_correction_notification
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    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Next, you will see the numbers you got incorrect, and have the opportunity to select the correct answer.  Please click or touch anywhere to continue.
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      saveStartStop = False
      startVal [time (s)] = 3
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    TextComponent number_of_correct_text_5
      letterHeight = 0.05
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number correct: {correct}"
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    TextComponent number_of_incorrect_text_5
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text [set every repeat] = $f"Number incorrect: {incorrect}"
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    CodeComponent log_time
      Code Type = Auto->JS
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      Begin Routine:
        elapsed = time.time() - exp_start_time
        print("Elapsed:", round(elapsed, 2))
        thisExp.addData('Trials 1 end time', round(elapsed, 2))
        #timer_lines.append(f"Global: {globalClock.getTime():.2f}s")
        #
      End Routine:
        elapsed = time.time() - exp_start_time
        print("Elapsed:", round(elapsed, 2))
        thisExp.addData('Trials 2 start time', round(elapsed, 2))
        #timer_lines.append(f"Global: {globalClock.getTime():.2f}s")
        #
    CodeComponent reset_timer
      Code Type = Auto->JS
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      End Routine:
        globalClock.reset()
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = digit_paths_black.csv
    loopType = random
    nReps = 50
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    conditions:
      [OrderedDict([('digit', np.int64(0)), ('arabic_path', 'digits_output/Arabic/0_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/0_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/0_Mandarin_black.png'), ('correct_answer', np.int64(0)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(1)), ('arabic_path', 'digits_output/Arabic/1_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/1_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/1_Mandarin_black.png'), ('correct_answer', np.int64(1)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(2)), ('arabic_path', 'digits_output/Arabic/2_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/2_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/2_Mandarin_black.png'), ('correct_answer', np.int64(2)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(3)), ('arabic_path', 'digits_output/Arabic/3_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/3_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/3_Mandarin_black.png'), ('correct_answer', np.int64(3)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))])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
    LoopInitiator inner_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator inner_loop
    Routine blank_screen
  LoopTerminator trials
  Routine error_correction_notification
  LoopInitiator error_correction_trials loopType="TrialHandler"
    conditionsFile = $f"{os.path.join('participant_conditions', os.path.basename(filename))}.csv"
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('digit', np.int64(0)), ('arabic_path', 'digits_output/Arabic/0_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/0_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/0_Mandarin_black.png'), ('correct_answer', np.int64(0)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(1)), ('arabic_path', 'digits_output/Arabic/1_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/1_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/1_Mandarin_black.png'), ('correct_answer', np.int64(1)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(2)), ('arabic_path', 'digits_output/Arabic/2_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/2_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/2_Mandarin_black.png'), ('correct_answer', np.int64(2)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))]),
      OrderedDict([('digit', np.int64(3)), ('arabic_path', 'digits_output/Arabic/3_Arabic_black.png'), ('hindi_path', 'digits_output/Hindi/3_Hindi_black.png'), ('mandarin_path', 'digits_output/Mandarin/3_Mandarin_black.png'), ('correct_answer', np.int64(3)), ('total_time', np.int64(20)), ('routine_time', np.int64(5)), ('min_time_for_incorrect', np.int64(2))])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
    Routine error_correction
  LoopTerminator error_correction_trials
  Routine start_next_experiment
  Routine blank_for_next
